PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GuessTheSound
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Routines
  Routine Study
    TextComponent Question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        What is this sound?
    TextboxComponent ResponseBox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent SubmitClick
      clickable = Submit
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent ClickTheButton
      letterHeight = 0.025
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      text = Click 'Submit' to continue.
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    SoundComponent SoundItem
      sound [set every repeat] = $SoundFiles2
      startVal [time (s)] = 0.0
      volume = 1.1
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    TextComponent ItemNo
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    CodeComponent FinishTrial
      Code Type = Auto->JS
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      End Routine:
        #if trials.thisN == 2: # i.e. trials 0, 1, 2 have been completed
         #   trials.finished = True # end the loop early


        if count == 60:
            trials.finished = true
            #trials.status = PsychoJS.Status.FINISHED
    TextboxComponent Submit
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      text = Submit
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  Routine Count2
    TextComponent no2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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  Routine Count3
    TextComponent no3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = 3
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  Routine Count1
    TextComponent no1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    CodeComponent AddCount
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/60"
  Routine Welcome
    TextComponent InstructionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to 'Guess the Sound!'


        In this task, you will be presented with different environmental sounds one by one. Listen to each sound and try to give it a short label so that another person, seeing only your labels, can guess what the sound was.
    KeyboardComponent WelcomeContinueKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CountIsZero
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
    TextComponent WelcomContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine VolumeAdjustment
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.
    SoundComponent Music
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent EndAdjustment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent AdjustContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin the task
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  Routine Start
    TextComponent StartTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We will now begin the task
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  Routine End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!



        Your Completion Code is
    TextboxComponent CompletionCode
      bold = True
      borderColor = Black
      color = Black
      editable = False
      fillColor = White
      letterHeight = 0.04
      padding = None
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      text = 51DF249E
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    TextComponent ExitTxt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to exit the study
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    KeyboardComponent ExitKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CodeTxt
      letterHeight = 0.04
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      text = Please write the code down so you can enter it when you return to Prolific. You may then exit the study by pressing SPACE.
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  Routine StartAdjustment
    TextComponent VolumeBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will first play some music to make sure your volume is at a comfortable level.
    TextComponent VolumeContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready for the sound check
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    KeyboardComponent VolumeContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome2
    TextComponent InstructionTxt2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Each sound will be only played once so please listen carefully and make sure you are in a quiet environment.

        You can leave your answer blank, but please try to label as many items as possible.
    TextComponent WelcomeContinue2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent WelcomeContinueKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Welcome2
  Routine StartAdjustment
  Routine VolumeAdjustment
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = GuessSounds_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SoundFiles', 'Initial/NoRepeat/Droplet_B.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Repeat/Pour.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Piano_A.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Repeat/IceDrop.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Writing_A.wav')]),
      OrderedDict([('SoundFiles', 'Initial/NoRepeat/Fireworks.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Typing.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Airhorn.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Buzz.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Camera.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Repeat/Airplane_B.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Repeat/Whistle_A.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Siren_A.wav')]),
      OrderedDict([('SoundFiles', 'Initial/NoRepeat/Baby_B.wav')]),
      OrderedDict([('SoundFiles', 'Initial/NoRepeat/Footsteps_B.wav')]),
      OrderedDict([('SoundFiles', 'Initial/NoRepeat/Snore_B.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Donkey.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Chicken_A.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Growl_A.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Bullfrog.wav')]),
      OrderedDict([('SoundFiles', 'Initial/Doubled/Guitar_A.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/PaperRip.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Heartbeat.wav')]),
      OrderedDict([('SoundFiles', 'Initial/NoRepeat/Duck_A.wav')]),
      OrderedDict([('SoundFiles', 'Test/Foils/Bird.wav')])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
    Routine Count3
    Routine Count2
    Routine Count1
    Routine Study
  LoopTerminator trials
  Routine End
